PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['نام'], expInfo['نام خانوادگی'], expName, expInfo['date'])
  Experiment info = {'نام': '', 'نام خانوادگی': '', 'کلاس': '', 'سن': '', 'چندمین بار است که در این تست شرکت می کنید': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = آزمون استروپ استاندارد
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Routines
  Routine trial
    TextComponent targetTxt
      color [set every repeat] = $colour
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word
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    ImageComponent imgRed
      image [set every repeat] = Red.jpg
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (-250, -200)
      size [set every repeat] = [125, 125]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    ImageComponent imgBlue
      image [set every repeat] = Blue.jpg
      opacity [set every repeat] = 1
      ori [set every repeat] = 1
      pos [set every repeat] = (-100, -200)
      size [set every repeat] = [125, 125]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    ImageComponent imgGreen
      image [set every repeat] = Green.jpg
      opacity [set every repeat] = 1
      ori [set every repeat] = 2
      pos [set every repeat] = (50, -200)
      size [set every repeat] = [125, 125]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    ImageComponent imgYellow
      image [set every repeat] = Yellow.jpg
      opacity [set every repeat] = 1
      ori [set every repeat] = 3
      pos [set every repeat] = (200, -200)
      size [set every repeat] = [125, 125]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    MouseComponent mouse
      clickable = imgRed, imgBlue, imgGreen, imgYellow
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine instruction
    TextComponent instrTxt
      color = $[1, 1, 1]
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        برای مواجهه با یک آزمون چالشی جدید آماده ای؟

        بخاطر داشته باش، واژه ها را در نظر نگیر و
        رنگها را انتخاب کن


        برای ادامه شروع را انتخاب کنید
    ImageComponent imgStart
      image = Start.jpg
      pos = [0, -310]
      size = [125, 125]
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent resBegin
      clickable = imgStart
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      languageStyle = Arabic
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        پایان آزمون

        از شما بسیار سپاسگزاریم!
  Routine feedback
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        #msg variable just needs some value at start

        expClock = core.Clock()
        msg = "Thanks for participating - that took %.2f minutes in total" %(expClock.getTime()/60.0)
      Begin Routine:
        msg='msg'
        ttext='img'+targetTxt.color
        t=ttext
        t=t.lower()
        if mouse.clicked_name:
          mous=mouse.clicked_name
          m=mous[-1]
          m=m.lower()
          if m==t : #stored on last run routine
            msg='آفرین, زمان=%.3f' % mouse.time[-1]
          else:
            msg='وای! دقت لطفا!'
    TextComponent feedbackTxt
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine instructionPractice
    TextComponent instrTxt1
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        این بخش تمرینی است تا با آزمون آشنا شوید

        بخاطر داشته باش، واژه ها را در نظر نگیر و
        رنگها را انتخاب کن


        برای ادامه شروع را انتخاب کنید
        ESC=خروج
    ImageComponent imgStart1
      image = Start.jpg
      pos = [0, -310]
      size = [125, 125]
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent resBegin1
      clickable = imgStart
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine instructionPractice
  LoopInitiator practisTrials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('word', 'قرمز'), ('colour', 'red'), ('congruent', 1), ('corrAns', 'imgRed')]),
      OrderedDict([('word', 'قرمز'), ('colour', 'blue'), ('congruent', 0), ('corrAns', 'imgBlue')]),
      OrderedDict([('word', 'آبی'), ('colour', 'red'), ('congruent', 0), ('corrAns', 'imgRed')]),
      OrderedDict([('word', 'آبی'), ('colour', 'blue'), ('congruent', 1), ('corrAns', 'imgBlue')]),
      OrderedDict([('word', 'سبز'), ('colour', 'green'), ('congruent', 1), ('corrAns', 'imgGreen')]),
      OrderedDict([('word', 'سبز'), ('colour', 'yellow'), ('congruent', 0), ('corrAns', 'imgYellow')]),
      OrderedDict([('word', 'زرد'), ('colour', 'green'), ('congruent', 0), ('corrAns', 'imgGreen')]),
      OrderedDict([('word', 'زرد'), ('colour', 'yellow'), ('congruent', 1), ('corrAns', 'imgYellow')])]
    Routine trial
    Routine feedback
  LoopTerminator practisTrials
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 6
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    conditions:
      [OrderedDict([('word', 'قرمز'), ('colour', 'red'), ('congruent', 1), ('corrAns', 'imgRed')]),
      OrderedDict([('word', 'قرمز'), ('colour', 'blue'), ('congruent', 0), ('corrAns', 'imgBlue')]),
      OrderedDict([('word', 'قرمز'), ('colour', 'green'), ('congruent', 0), ('corrAns', 'imgGreen')]),
      OrderedDict([('word', 'قرمز'), ('colour', 'yellow'), ('congruent', 0), ('corrAns', 'imgYellow')]),
      OrderedDict([('word', 'آبی'), ('colour', 'red'), ('congruent', 0), ('corrAns', 'imgRed')]),
      OrderedDict([('word', 'آبی'), ('colour', 'blue'), ('congruent', 1), ('corrAns', 'imgBlue')]),
      OrderedDict([('word', 'آبی'), ('colour', 'green'), ('congruent', 0), ('corrAns', 'imgGreen')]),
      OrderedDict([('word', 'آبی'), ('colour', 'yellow'), ('congruent', 0), ('corrAns', 'imgYellow')]),
      OrderedDict([('word', 'سبز'), ('colour', 'red'), ('congruent', 0), ('corrAns', 'imgRed')]),
      OrderedDict([('word', 'سبز'), ('colour', 'blue'), ('congruent', 0), ('corrAns', 'imgBlue')]),
      OrderedDict([('word', 'سبز'), ('colour', 'green'), ('congruent', 1), ('corrAns', 'imgGreen')]),
      OrderedDict([('word', 'سبز'), ('colour', 'yellow'), ('congruent', 0), ('corrAns', 'imgYellow')]),
      OrderedDict([('word', 'زرد'), ('colour', 'red'), ('congruent', 0), ('corrAns', 'imgRed')]),
      OrderedDict([('word', 'زرد'), ('colour', 'blue'), ('congruent', 0), ('corrAns', 'imgBlue')]),
      OrderedDict([('word', 'زرد'), ('colour', 'green'), ('congruent', 0), ('corrAns', 'imgGreen')]),
      OrderedDict([('word', 'زرد'), ('colour', 'yellow'), ('congruent', 1), ('corrAns', 'imgYellow')])]
    Routine trial
  LoopTerminator trials
  Routine thanks
